CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Everything
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Everything
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Phase
    Channel number:2
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    Image name:GFP
    Channel number:3
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    Image name:mCh
    Channel number:4
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    Image name:Dapi

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Dapi
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):40,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.6
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:8|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:Circles
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Circles
    Name the output objects:Cell_area_assignment
    Select the operation:Expand objects until touching
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GFP
    Name the primary objects to be identified:Transfected
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:mCh
    Name the primary objects to be identified:Red_cytoplasm
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:12|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
    Parent objects:Cell_area_assignment
    Child objects:Red_cytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ApoptosisSignal
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
RelateObjects:[module_num:13|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
    Parent objects:Cell_area_assignment
    Child objects:Transfected
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TransfectedCells
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:GFP
    Select objects to measure:TransfectedCells

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:mCh
    Select objects to measure:ApoptosisSignal

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:ApoptosisSignal, TransfectedCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive/Dokumente/UNI/Harvard/Experiments/Apoptosis Assay/A549 try1 data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:ApoptosisSignal
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:TransfectedCells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cell_area_assignment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
